CellProfiler Pipeline: http://www.cellprofiler.org
Version:5
DateRevision:421
GitHash:
ModuleCount:18
HasImagePlaneDetails:False

Images:[module_num:1|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
    Filter images?:Custom
    Select the rule criteria:or (file does endwith "DAPI.tif") (file does endwith "GFP.tif")

Metadata:[module_num:2|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
    Extract metadata?:Yes
    Metadata data type:Text
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    Extraction method count:2
    Metadata extraction method:Extract from image file headers
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    Extract metadata from:All images
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    Does cached metadata exist?:Yes
    Metadata extraction method:Extract from file/folder names
    Metadata source:File name
    Regular expression to extract from file name:^(?P<CellType>.*)_(?P<Virus>.*)_(?P<Condition>.*)_(?P<FOV>.*)_(?P<Channel>.*).tif
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    Extract metadata from:All images
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
NamesAndTypes:[module_num:3|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
    Assign a name to:Images matching rules
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    Image set matching method:Order
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    Assignments count:2
    Single images count:0
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    Process as 3D?:No
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    Select the rule criteria:and (metadata does Channel "GFP")
    Name to assign these images:NP
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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    Select the rule criteria:and (metadata does Channel "DAPI")
    Name to assign these images:DNA
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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
Groups:[module_num:4|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
    Do you want to group your images?:No
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
RescaleIntensity:[module_num:5|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
    Select the input image:DNA
    Name the output image:RescaleIntensity
    Rescaling method:Choose specific values to be reset to the full intensity range
    Method to calculate the minimum intensity:Minimum for each image
    Method to calculate the maximum intensity:Maximum for each image
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
IdentifyPrimaryObjects:[module_num:6|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
    Select the input image:RescaleIntensity
    Name the primary objects to be identified:Nuclei
    Typical diameter of objects, in pixel units (Min,Max):10,100
    Discard objects outside the diameter range?:Yes
    Discard objects touching the border of the image?:Yes
    Method to distinguish clumped objects:Intensity
    Method to draw dividing lines between clumped objects:Shape
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    Speed up by using lower-resolution image to find local maxima?:Yes
    Fill holes in identified objects?:After both thresholding and declumping
    Automatically calculate size of smoothing filter for declumping?:Yes
    Automatically calculate minimum allowed distance between local maxima?:Yes
    Handling of objects if excessive number of objects identified:Continue
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    Use advanced settings?:Yes
    Threshold setting version:12
    Threshold strategy:Adaptive
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    Threshold smoothing scale:1.0
    Threshold correction factor:1
    Lower and upper bounds on threshold:0.0,1
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    Two-class or three-class thresholding?:Two classes
    Log transform before thresholding?:No
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    Size of adaptive window:50
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    Thresholding method:Otsu

RescaleIntensity:[module_num:7|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
    Select the input image:NP
    Name the output image:RescaledNP
    Rescaling method:Choose specific values to be reset to the full intensity range
    Method to calculate the minimum intensity:Custom
    Method to calculate the maximum intensity:Custom
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    Intensity range for the input image:0.05,0.2
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
IdentifySecondaryObjects:[module_num:8|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
    Select the input objects:Nuclei
    Name the objects to be identified:Cells
    Select the method to identify the secondary objects:Propagation
    Select the input image:RescaledNP
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    Regularization factor:0.1
    Discard secondary objects touching the border of the image?:No
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    Fill holes in identified objects?:Yes
    Threshold setting version:12
    Threshold strategy:Adaptive
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    Threshold smoothing scale:0
    Threshold correction factor:0.9
    Lower and upper bounds on threshold:0.0,1
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    Log transform before thresholding?:No
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    Size of adaptive window:50
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    Thresholding method:Minimum Cross-Entropy

IdentifyTertiaryObjects:[module_num:9|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
    Select the larger identified objects:Cells
    Select the smaller identified objects:Nuclei
    Name the tertiary objects to be identified:Cytoplasm
    Shrink smaller object prior to subtraction?:Yes

GrayToColor:[module_num:10|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
    Select a color scheme:RGB
    Rescale intensity:Yes
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    Select the image to be colored green:NP
    Select the image to be colored blue:DNA
    Name the output image:Merged_DNA_NP
    Relative weight for the red image:1.0
    Relative weight for the green image:1.0
    Relative weight for the blue image:1.0
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
OverlayOutlines:[module_num:11|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
    Display outlines on a blank image?:No
    Select image on which to display outlines:Merged_DNA_NP
    Name the output image:Outlines_on_Merge
    Outline display mode:Color
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    How to outline:Inner
    Select outline color:Red
    Select objects to display:Nuclei
    Select outline color:#FFFFFF
    Select objects to display:Cytoplasm

Tile:[module_num:12|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
    Select an input image:Merged_DNA_NP
    Name the output image:TiledImage
    Tile assembly method:Within cycles
    Final number of rows:8
    Final number of columns:12
    Image corner to begin tiling:top left
    Direction to begin tiling:row
    Use meander mode?:No
    Automatically calculate number of rows?:Yes
    Automatically calculate number of columns?:Yes
    Select an additional image to tile:Outlines_on_Merge

SaveImages:[module_num:13|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
    Select the type of image to save:Image
    Select the image to save:TiledImage
    Select method for constructing file names:From image filename
    Select image name for file prefix:DNA
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    Append a suffix to the image file name?:No
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    Saved file format:png
    Output file location:Default Input Folder sub-folder|Downloads/Infection_Fabian/CP_Out
    Image bit depth:8-bit integer
    Overwrite existing files without warning?:No
    When to save:First cycle
    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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    Save with lossless compression?:Yes

MeasureObjectIntensity:[module_num:14|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
    Select images to measure:DNA, NP
    Select objects to measure:Cells, Cytoplasm, Nuclei

DisplayDataOnImage:[module_num:15|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enabled:False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
    Display object or image measurements?:Object
    Select the input objects:Nuclei
    Measurement to display:Intensity_IntegratedIntensity_NP
    Select the image on which to display the measurements:Merged_DNA_NP
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    Name the output image that has the measurements displayed:DisplayImage
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    Image elements to save:Image
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    Display mode:Color
    Color map:afmhot
    Display background image?:Yes
    Color map scale:Use this image's measurement range
    Color map range:0.0,1.0

DisplayHistogram:[module_num:16|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enabled:False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
    Select the object whose measurements will be displayed:Nuclei
    Select the object measurement to plot:Intensity_IntegratedIntensity_NP
    Number of bins:100
    How should the X-axis be scaled?:linear
    How should the Y-axis be scaled?:linear
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    Specify min/max bounds for the X-axis?:No
    Minimum/maximum values for the X-axis:0.0,1.0

DisplayScatterPlot:[module_num:17|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enabled:False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
    Type of measurement to plot on X-axis:Object
    Select the object to plot on the X-axis:Nuclei
    Select the measurement to plot on the X-axis:Intensity_IntegratedIntensity_DNA
    Type of measurement to plot on Y-axis:Object
    Select the object to plot on the Y-axis:Nuclei
    Select the measurement to plot on the Y-axis:Intensity_IntegratedIntensity_NP
    How should the X-axis be scaled?:linear
    How should the Y-axis be scaled?:linear
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
ExportToSpreadsheet:[module_num:18|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
    Select the column delimiter:Tab
    Add image metadata columns to your object data file?:Yes
    Add image file and folder names to your object data file?:Yes
    Select the measurements to export:Yes
    Calculate the per-image mean values for object measurements?:No
    Calculate the per-image median values for object measurements?:No
    Calculate the per-image standard deviation values for object measurements?:No
    Output file location:Default Input Folder sub-folder|Downloads/Infection_Fabian/CP_Out
    Create a GenePattern GCT file?:No
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    Export all measurement types?:No
    Press button to select measurements:Nuclei|Intensity_IntegratedIntensity_NP,Nuclei|Intensity_IntegratedIntensity_DNA,Cells|Intensity_IntegratedIntensity_DNA,Cells|Intensity_IntegratedIntensity_NP,Cytoplasm|Intensity_IntegratedIntensity_DNA,Cytoplasm|Intensity_IntegratedIntensity_NP
    Representation of Nan/Inf:NaN
    Add a prefix to file names?:Yes
    Filename prefix:MyExpt_
    Overwrite existing files without warning?:No
    Data to export:Nuclei
    Combine these object measurements with those of the previous object?:No
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    Use the object name for the file name?:Yes
    Data to export:Cells
    Combine these object measurements with those of the previous object?:No
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    Use the object name for the file name?:Yes
    Data to export:Cytoplasm
    Combine these object measurements with those of the previous object?:No
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    Use the object name for the file name?:Yes
